<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:eph="clr-namespace:Bonsai.Ephys;assembly=Bonsai.Ephys"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>1</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SpinnakerCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:Rhd2000EvalBoard">
          <eph:BitFileName>C:\Users\Niell Lab\Desktop\open-ephys\rhd2000_usb3.bit</eph:BitFileName>
          <eph:SampleRate>SampleRate20000Hz</eph:SampleRate>
          <eph:ExternalFastSettleEnabled>false</eph:ExternalFastSettleEnabled>
          <eph:LowerBandwidth>0.1</eph:LowerBandwidth>
          <eph:UpperBandwidth>7500</eph:UpperBandwidth>
          <eph:DspCutoffFrequency>1</eph:DspCutoffFrequency>
          <eph:DspEnabled>true</eph:DspEnabled>
          <eph:CableDelayA xsi:nil="true" />
          <eph:CableDelayB xsi:nil="true" />
          <eph:CableDelayC xsi:nil="true" />
          <eph:CableDelayD xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BoardAdcData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="eph:AdcScale">
          <eph:AdcType>BoardAdc</eph:AdcType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>4</dsp:int>
            <dsp:int>5</dsp:int>
            <dsp:int>6</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>